Application:Speller%20Targets matrix TargetDefinitions= 9 { Display Enter Display%20Size Icon%20File Sound Intensified%20Icon } A A 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/img/img0.png % % B B 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/img/img0.png % % C C 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/img/img0.png % % D D 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/img/punto.png % % E E 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/img/img0.png % % F F 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/img/espacio.png % % G G 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/img/img0.png % % H H 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/img/img0.png % % I I 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/img/img0.png % % // speller target properties